PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = GameInterfacePsychopy
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Welcome
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    ImageComponent welcome
      image = images/welcome.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine collectbaseline
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    ImageComponent collectbaselinee
      image = images/collectbaseline.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixationpoint
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    ImageComponent fixationpointt
      image = images/fixationpoint.jpg
      size = (2,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine instructions
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    ImageComponent instructionsim
      image = images/newinstructions.png
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine levelup
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    ImageComponent levelupp
      image = images/levelup.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tryagain
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    ImageComponent image_2
      image = images/tryagain.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine whatquadrantiswaldo
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    ImageComponent whatquadrant
      image = images/whatquadrant.jpg
      size = (2,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'left','right','space','up', 'down', 'a', 'b', 'c', 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine whatquadlv1
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    ImageComponent whatquadrantL1
      image = images/whatquadrantL1.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'left','right','space','up', 'down', 'a', 'b', 'c', 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine whatquadrantlv2
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    ImageComponent whatquadrantLv2
      image = images/whatquadrantLv2.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'a', 'b', 'c', 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine whatquadlv3
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    ImageComponent whatquadrantlv3
      image = images/whatquadrantlv3.jpg
      size = (2,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'a', 'b', 'c', 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    ImageComponent image
      image = images/end.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine beat3
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    ImageComponent beatt3
      image = images/beat3.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine beat1go2
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    ImageComponent image_3
      image = images/movetolv2.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine beat2go3
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    ImageComponent image_4
      image = images/tolevel3.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine level1waldo
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    ImageComponent image_5
      image = images/WaldoLv1.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_14
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine level2waldo
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    ImageComponent image_6
      image = images/waldolv2.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_15
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine level3waldo
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    ImageComponent image_7
      image = images/waldolv3.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_16
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine collectbaseline
  Routine fixationpoint
  Routine instructions
  Routine level1waldo
  Routine whatquadrantiswaldo
  Routine whatquadlv1
  Routine beat1go2
  Routine level2waldo
  Routine whatquadrantiswaldo
  Routine whatquadrantlv2
  Routine beat2go3
  Routine level3waldo
  Routine whatquadrantiswaldo
  Routine whatquadlv3
  Routine levelup
  Routine tryagain
  Routine beat3
  Routine end
